PsychoPy2experiment version="2022.2.4"
Settings
  Data filename = u'data/%s_%s_%s' % (expName, expInfo['participantNo'], expInfo['blockNo'])
  Experiment info = {'participantNo': '1000', 'blockNo': '1'}
  Full-screen window = True
  Monitor = lanamonitor
  Screen = 1
  Show mouse = True
  Units = deg
  Window size (pixels) = [1920, 1080]
  color = 1.0000, 1.0000, 1.0000
  expName = paired
  eyetracker = Tobii Technology
  keyboardBackend = ioHub
  tbModel = Tobii Pro Spectrum
  tbSampleRate = 60
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Routines
  Routine fixation1
    CodeComponent code_3
      Code Type = Auto->JS
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      Before Experiment:
        outframe1 = 0
        outframe2 = 0
        import random
        fixheight = 1.5
    EyetrackerRecordComponent etRecord
      actionType = Start Only
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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    TextComponent text
      color = black
      durationEstim = 1.5
      letterHeight = fixheight
      startVal [time (s)] = 0.0
      stopVal [duration (frames)] = 90
      text = +
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  Routine fixation2
    TextComponent fix2
      color [set every frame] = $ ("red" if (outframe1 > 6 or outframe2 > 6) else "black")
      durationEstim = 0.3
      letterHeight = fixheight
      startVal [time (s)] = 0.0
      stopVal [duration (frames)] = 18
      text = +
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  Routine response1
    KeyboardComponent key_resp
      allowedKeys = 'up','down'
      correctAns = direction
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_2
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 2
      startVal [time (s)] = 0.0
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      text:
        Direction?
        Up / Down
  Routine RDM1
    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        outframe1 = 0
        peripos = (random.choice([-10, 10]), 0.0)
      Each Frame:
        if roi.isLookedIn:
            outframe1 += 0
        else:
            outframe1 += 1
      End Routine:
        thisExp.addData('outframe1', outframe1)
    DotsComponent dots
      coherence [set every repeat] = (centralCoh if order == "centerFirst" else peripheralCoh)
      color = -1.0000, -1.0000, -1.0000
      dir [set every repeat] = (90 if direction == "up" else 270)
      dotLife = 3
      dotSize = 5.5
      durationEstim = 0.3
      fieldPos [set every repeat] = ((0.0, 0.0) if order== "centerFirst" else peripos) 
      fieldShape = circle
      fieldSize = 4.5
      nDots = 120
      noiseDots = direction
      refreshDots = repeat
      signalDots = same
      speed [set every repeat] = (0.1 if (int(expInfo['blockNo']) % 2 == 1) else 0.033)
      startVal [time (s)] = 0.0
      stopVal [duration (frames)] = 18
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    RegionOfInterestComponent roi
      anchor = center
      debug = False
      durationEstim = 0.3
      endRoutineOn = none
      lookDur = 0.1
      nVertices = 4
      ori = 0
      pos = (0, 0)
      save = every look
      shape = circle
      size = (1.5, 1.5)
      startVal [time (s)] = 0.0
      stopVal [duration (frames)] = 18
      syncScreenRefresh = True
      timeRelativeTo = roi onset
      units = from exp settings
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    TextComponent text_4
      color [set every frame] = $("red" if outframe1>6 else "black")
      durationEstim = 0.3
      letterHeight = fixheight
      startVal [time (s)] = 0.0
      stopVal [duration (frames)] = 18
      text = +
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  Routine response2
    KeyboardComponent key_resp_2
      allowedKeys = 'left','right'
      correctAns = direction
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_3
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 2
      startVal [time (s)] = 0.0
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      text:
        More Coherent?
        First / Second
  Routine end
    EyetrackerRecordComponent etRecord_2
      actionType = Stop Only
      stopVal [duration (s)] = 0.5
      syncScreenRefresh = False
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  Routine begin
  Routine RDM2
    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        outframe2 = 0
      Each Frame:
        if roi_2.isLookedIn:
            outframe2 += 0
        else:
            outframe2 += 1
      End Routine:
        thisExp.addData('outframe2', outframe2)
    DotsComponent dots_2
      coherence [set every repeat] = (peripheralCoh if order == "centerFirst" else centralCoh)
      color = -1.0000, -1.0000, -1.0000
      dir [set every repeat] = (90 if direction == "up" else 270)
      dotLife = 3
      dotSize = 5.5
      durationEstim = 0.3
      fieldPos [set every repeat] = (peripos if order== "centerFirst" else (0.0, 0.0)) 
      fieldShape = circle
      fieldSize = 4.5
      nDots = 120
      noiseDots = direction
      refreshDots = repeat
      signalDots = same
      speed [set every repeat] = (0.1 if (int(expInfo['blockNo']) % 2 == 1) else 0.033)
      startVal [time (s)] = 0.0
      stopVal [duration (frames)] = 18
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    RegionOfInterestComponent roi_2
      anchor = center
      debug = False
      durationEstim = 0.3
      endRoutineOn = none
      lookDur = 0.1
      nVertices = 4
      ori = 0
      pos = (0, 0)
      save = every look
      shape = circle
      size = (1.5, 1.5)
      startVal [time (s)] = 0.0
      stopVal [duration (frames)] = 18
      syncScreenRefresh = True
      timeRelativeTo = roi onset
      units = from exp settings
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    TextComponent text_5
      color [set every frame] = $ ("red" if (outframe1 > 6 or outframe2 > 6) else "black")
      durationEstim = 0.3
      letterHeight = fixheight
      startVal [time (s)] = 0.0
      stopVal [duration (frames)] = 18
      text = +
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  Routine csvsave
    CodeComponent code_4
      Code Type = Auto->JS
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      End Routine:
        if order == "centerFirst":
            if key_resp_2.keys == "left":
                resp_center_is_more_coherent = 1
            else:
                resp_center_is_more_coherent = 0
        else:
            if key_resp_2.keys == "left":
                resp_center_is_more_coherent = 0
            else:
                resp_center_is_more_coherent = 1

        thisExp.addData('resp_center_is_more_coherent', resp_center_is_more_coherent)
  Routine feedback_csvsave
    CodeComponent code_5
      Code Type = Auto->JS
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      Begin Routine:
        if direction == "up":
            if key_resp.keys == "up":
                resp_dir_TorF = 1
            else:
                resp_dir_TorF = 0
        else:
            if key_resp.keys == "down":
                resp_dir_TorF = 1
            else:
                resp_dir_TorF = 0

        thisExp.addData('resp_dir_TorF', resp_dir_TorF)
      End Routine:
        if order == "centerFirst":
            if key_resp_2.keys == "left":
                resp_center_is_more_coherent = 1
            else:
                resp_center_is_more_coherent = 0
        else:
            if key_resp_2.keys == "left":
                resp_center_is_more_coherent = 0
            else:
                resp_center_is_more_coherent = 1

        thisExp.addData('resp_center_is_more_coherent', resp_center_is_more_coherent)
    TextComponent text_6
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 2
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.7
      text [set every repeat] = $("Correct" if resp_dir_TorF== 1 else "Wrong")
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  EyetrackerCalibrationRoutine calibration
    borderColor = black
    borderWidth = 2
    colorSpace = rgb
    expandDur = 1
    expandScale = 1.5
    fillColor = 1.0000, 1.0000, 1.0000
    innerBorderColor = black
    innerBorderWidth = 2
    innerFillColor = green
    innerRadius = 0.35
    movementAnimation = True
    movementDur = 1.0
    outerRadius = 1
    progressMode = time
    randomisePos = True
    targetDelay = 1.0
    targetDur = 1.5
    targetLayout = THREE_POINTS
    textColor = -1.0000, -1.0000, -1.0000
    units = from exp settings
Flow
  EyetrackerCalibrationRoutine calibration
  LoopInitiator block loopType="TrialHandler"
    conditionsFile = paired_conditions.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('centralCoh', 0.2), ('peripheralCoh', 0.0), ('direction', 'up'), ('order', 'periphFirst')]),
      OrderedDict([('centralCoh', 0.2), ('peripheralCoh', 0.0), ('direction', 'down'), ('order', 'centerFirst')]),
      OrderedDict([('centralCoh', 0.2), ('peripheralCoh', 0.1), ('direction', 'up'), ('order', 'periphFirst')]),
      OrderedDict([('centralCoh', 0.2), ('peripheralCoh', 0.1), ('direction', 'down'), ('order', 'periphFirst')]),
      OrderedDict([('centralCoh', 0.2), ('peripheralCoh', 0.2), ('direction', 'up'), ('order', 'centerFirst')]),
      OrderedDict([('centralCoh', 0.2), ('peripheralCoh', 0.2), ('direction', 'down'), ('order', 'periphFirst')]),
      OrderedDict([('centralCoh', 0.2), ('peripheralCoh', 0.35), ('direction', 'up'), ('order', 'centerFirst')]),
      OrderedDict([('centralCoh', 0.2), ('peripheralCoh', 0.35), ('direction', 'down'), ('order', 'periphFirst')]),
      OrderedDict([('centralCoh', 0.2), ('peripheralCoh', 0.5), ('direction', 'up'), ('order', 'periphFirst')]),
      OrderedDict([('centralCoh', 0.2), ('peripheralCoh', 0.5), ('direction', 'down'), ('order', 'centerFirst')]),
      OrderedDict([('centralCoh', 0.2), ('peripheralCoh', 0.65), ('direction', 'up'), ('order', 'centerFirst')]),
      OrderedDict([('centralCoh', 0.2), ('peripheralCoh', 0.65), ('direction', 'down'), ('order', 'centerFirst')]),
      OrderedDict([('centralCoh', 0.2), ('peripheralCoh', 0.8), ('direction', 'up'), ('order', 'periphFirst')]),
      OrderedDict([('centralCoh', 0.2), ('peripheralCoh', 0.8), ('direction', 'down'), ('order', 'periphFirst')])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
    Routine fixation1
    Routine RDM1
    Routine fixation2
    Routine RDM2
    Routine response1
    Routine feedback_csvsave
    Routine response2
    Routine csvsave
  LoopTerminator block
  Routine end
